\ Sensory Pre-Conditioning (SPC): PreConditioning training_B (multi-cue)
\ Description: 12 pairings each of TONE(S2) --> Solid(L)Light(S1) and NOISE(S2) --> Flashing(R)LIGHT(S1)
\ Created: 3/30/11
\ Last Updated:
\ Author: Michael Saddoris

\Inputs
^LLever=2
^RLever=1
^Foodcup=5

\Outputs
^RPanelLight=3
^LPanelLight=4
^Tone=6
^Noise=7
^Houselight=8
^Fan=10
^Pellet=11
^Cue_LED=12
^TTL_S2TONE=17
^TTL_S1SolidLight=18
^TTL_S2NOISE=19
^TTL_S1FlashingLight=20
^TTL_CSMIN_NON=21
^TTL_FOODCUP_ENTRY=22
^TTL_FOODCUP_EXIT=23
^TTL_START=24
^TTL_END=25
^TTL_Pellet=26

\Variables
\ A = LIST ITIs (Set A)
\ B = LIST ITIs (Set B)
\ C = LIST ITIs (Set C)
\ D = LIST CS Type (Set A)
\ E = LIST CS Type (Set B)
\ F = LIST CS Type (Set C)
\ G = Current ITI
\ H = Current Trial Type
\ I = 
\ J = CS+Reinforced Total Counter
\ K = CS+NonReinforced Total Counter
\ L = CS- Total Counter
\ M = Location in Trial Type array
\ N = Array of SOC trial types
\ O = ToneGenerator - Tone Frequency
\ P = ToneGenerator - Tone Volume (amplitude)
\ Q = ToneGenerator - Attack/Decay Time
\ R = ToneGenerator - Duration of Tone
\ S = Session Timer
\ T = 
\ U = 
\ V = 
\ W = 
\ X = 
\ Y = Temp Counter for FC entries/exits
\ Z = 

\Zpulses:
\Z1  - Pre-CS Start
\Z2  - CS+ Detector
\Z3  - CS+(Non-reinforced) Detector
\Z4  - CS- Detector
\Z5  - Initiates SOC cue habituation
\Z6  - Returns to MAIN (SS1) to start FOC Reminder
\Z7  - Starts the FOC Reminders
\Z8  - Returns to MAIN to start SOC
\Z9  - Kills Intermittent Light
\Z10 - Initiates Intermittent Light
\Z11 - Pellet Delivery Start
\Z12 -
\Z13 -
\Z14 - 
\Z15 -
\Z16 -
\Z17 - Event003 - Tone (CS- related)
\Z18 - Event004 - Noise (CS+ related)
\Z19 - Event005 - CS Plus (Reinforced)
\Z20 - Event006 - CS Minus
\Z21 - Event007 - CS Plus (Nonreinforced)
\Z22 - Event008 - Foodcup Entry
\Z23 - Event009 - Foodcup Exit
\Z24 - Event010 - Starts Session
\Z25 - Event011 - 
\Z26 - Event012 - Pellet
\Z27 - Event013 - 
\Z28 - Event014 -
\Z29 - Event015 -
\Z30 - Event016 -


LIST A = 105", 260", 175", 230", 205", 255", 205", 200", 180", 175", 190", 150", 180", 85", 135", 95", 215", 230", 80", 145", 195", 230", 115", 85", 200", 135", 95", 170"
LIST B = 95", 85", 240", 165", 165", 130", 250", 80", 240", 135", 160", 155", 185", 190", 115", 245", 215", 255", 135", 165", 110", 140", 120", 160", 175", 230", 245", 135"
LIST C = 190", 120", 135", 160", 110", 195", 115", 235", 205", 130", 135", 115", 165", 230", 260", 205", 140", 235", 235", 125", 190", 150", 160", 210", 205", 100", 180", 85"
LIST N = 1, 1, 2, 1, 2, 2, 1, 2, 1, 2
LIST E = 2, 1, 2, 1, 1, 3, 2, 1, 2, 1, 1, 4, 2, 2, 1, 2, 1, 4, 2, 2, 2, 1, 1, 3, 2, 2, 1, 1, 2, 3, 2, 1, 1, 2, 1
LIST F = 0, 0, 0, 1, 0, 1, 0, 1, 1, 0, 0, 1, 1, 1, 0, 0, 1, 0, 2, 0, 0, 1, 1, 1, 0, 0, 2, 1
LIST Z = 11", 12", 13", 14"

DISKCOLUMNS = 1

S.S.1,
      S1,
          .1": ON ^LLever, ^RLever ---> S2
      S2,
          #START: ON ^Fan, ^Houselight ---> S3
      S3, 
          .1": IF M < 12 [@TRUE, @FALSE]
               @TRUE: SHOW 1, TONE_SOLID, M ---> S4
               @FALSE: SHOW 1, TONE_SOLID, M; OFF ^Fan, ^Houselight ---> S9
      S4, 
          .1": LIST G = C(I) ---> S5
      S5,
          G#T: ON ^Cue_LED ---> S6
      S6, 
          10": OFF ^Cue_LED; Z4; Z17; ADD M ---> S7
      S7,
          10": ON ^LPanelLight; Z18  ---> S8
      S8,
          10": OFF ^LPanelLight ---> S3
      S9, 
          10': ON ^Fan, ^Houselight ---> S10
      S10,
          .1": IF M < 24 [@TRUE, @FALSE]
               @TRUE: SHOW 2, NOISE_FLASH, M-12 ---> S11
               @FALSE: SHOW 2, NOISE_FLASH, M-12; Z1 ---> S2
      S11, 
          .1": LIST G = B(I) ---> S12
      S12,
          G#T: ON ^Cue_LED ---> S13
      S13, 
          10": OFF ^Cue_LED; ADD M; ON ^NOISE; Z19 ---> S14
      S14,
          10": OFF ^NOISE; Z3; Z20 ---> S15
      S15,
          10": Z9 ---> S10
      

S.S.2, \Reinforced CS+ (Flashing Right Panel Light)
      S1,   \ If CS+, Issue Z10 to activate intermittent Light
          #Z2: Z10 ---> S2
      S2,   \ Wait 9.5", then begin to deliver pellets (Z11 and z26)
          9.5":  Z11; Z26 ---> S3
      S3,   \ 10" after start of CS+, issue z9 to kill light, return to S1
          0.5": Z9 ---> S1


S.S.3, \ Nonreinforced CS+ (Flashing Right Panel Light)
      S1,   \ If CS+ (non), activate panel light
          #Z3: Z10; Z20 ---> S2
      S2,   \ Wait 10", then kill light
          10": Z9 ---> S1


S.S.4, \Intermittent Light generator
      S1,
          #Z10: ---> S2
      S2, 
          0.25": ON ^RPanelLight ---> S3
          #z9: OFF ^RPanelLight ---> S1
      S3, 
          0.25": OFF ^RPanelLight ---> S2
          #z9: ---> S1


S.S.5, \ S2 TONE
\      S1, 
\          #Z4: ON ^LPanelLight ---> S2
\      S2, 
\          10": OFF ^LPanelLight ---> S1

       S1, 
          #Z4: ~OnFreq(MG, BOX,O);~; ---> Sx


S.S.6,  \Pellet Delivery
      S1, 
          #Z11: ON ^Pellet ---> S2
      S2,
          0.25": OFF ^Pellet ---> S3
      S3, 
          0.25": ON ^Pellet ---> S4
      S4, 
          0.25": OFF ^Pellet ---> S5
      S5,
          0.25": ON ^Pellet ---> S6
      S6,
          0.25": OFF ^Pellet ---> S1

S.S.7,
S1,
       #START: ---> S2

S2,    \ THIS IS DIRECTLY FROM MED. "Beam Break Defined - 20 ms Break, 20 ms Release.
       \ Inputs in Level Mode generate an input "count" on each interrupt. 
       \ With a 1ms system resolution 2 counts will be reached in 20ms. The Z22 pulse
       \ is used to signal a complete Beam Break. The second statement resets the
       \ counter every 20 ms so that a partial Beam Break of less than 20 ms will 
       \ constitute a response.

       #R^Foodcup: ADD Y; if Y >= 2 [@BeamBreak, @NoBeamBreak]
              @BeamBreak: Z22; Set Y = 0 ---> S3
              @NoBeamBreak: ---> SX
S3,    \ As long as the Bream is broken, the second statement causes a re-entry to
       \ this State. This resets the internal 20 ms timer so that it never times out.
       \ When the beam is released for 20 ms, the time times out and a Z23 pulse
       \ signals the release.

       0.02": Z23 ---> S2
       #R^Foodcup: ---> S3

S.S.8, 
\ Session timer. Returns timestamp S every 0.1"
       S1,
	  #START: ---> S2
       S2, 
	  .1": Set S = S + .1"; SHOW 5, Min, S/1' ---> SX

S.S.9,
\ Kill session after all cues delivered
       S1,
          1": IF M < 24 [@Session, @Kill]
             @Session: SHOW 4, TOTAL, J+K+L+M ---> SX
             @Kill: ---> S2
          #Z1: ---> S2
       S2, 
          30": OFF ^Houselight, ^Fan; LOCKON ^LLever, ^RLever ---> STOPABORTFLUSH

S.S.10,
S1,
     #Z19: ON ^TTL_S2NOISE ---> S2
S2, 
     0.001": OFF ^TTL_S2NOISE ---> S1

S.S.11,
S1, 
     #Z20: ON ^TTL_S1FlashingLight ---> S2
S2, 
     0.001": OFF ^TTL_S1FlashingLight ---> S1


S.S.12,
S1,
     #Z21: ON ^TTL_CSMIN_NON ---> S2
S2,
     0.001": OFF ^TTL_CSMIN_NON ---> S1

S.S.13,
S1, 
     #Z22: ON ^TTL_FOODCUP_ENTRY ---> S2
S2, 
     0.001": OFF ^TTL_FOODCUP_ENTRY ---> S1

S.S.14,
S1,
     #Z23: ON ^TTL_FOODCUP_EXIT ---> S2
S2,
     0.001": OFF ^TTL_FOODCUP_EXIT ---> S1

S.S.15,
S1,
     #Z24: ON ^TTL_START ---> S2
S2,
     0.001": OFF ^TTL_START ---> S1

S.S.16,
S1,
     #Z26: ON ^TTL_Pellet ---> S2
S2,
     0.001": OFF ^TTL_Pellet ---> S1

S.S.17,
\Hack way of coding the habituation trials. After the program starts, initiate a fixed pattern of 10" cues, 
\separated by 2'. After a total of 6 (3 each SOC+ and SOC-), then send z-pulse to go back to the S.S.1 main program 
S1, 
     #Z5: ---> S2
S2, 
     2': ON ^TONE; Z17 ---> S3
S3, 
     10": OFF ^TONE ---> S4
S4,
     2': ON ^NOISE; Z18 ---> S5
S5,
     10": OFF ^NOISE ---> S6
S6, 
     2': ON ^NOISE; Z18 ---> S7
S7,
     10": OFF ^NOISE ---> S8
S8,
     2': ON ^TONE; Z17 ---> S9
S9,
     10": OFF ^TONE ---> S10
S10,
     2': ON ^TONE; Z17 ---> S11
S11,
     10": OFF ^TONE ---> S12
S12,
     2': ON ^NOISE; Z18 ---> S13
S13, 
     10": OFF ^NOISE; Z6 ---> S1

S.S.18,
\ Invokes the already-written FOC CS+ and CS- modules. Delivers a total of 6 (3CS+ and 3CS-) trials, then kicks
\ back with a z-pulse to the S.S.1 (main) program to move on to SOC. Z2 = invokes CS+; Z3 invokes CS-
S1, 
     #Z7: ---> S2
S2,
     90": Z2; Z19 ---> S3
S3, 
     2': Z2; Z19 ---> S4
S4, 
     2': Z4; Z20 ---> S5
S5,
     90": Z4; Z20 ---> S6
S6,
     2': Z2; Z19 ---> S7
S7, 
     2': Z4; Z20 ---> S8
S8,
     90": Z8 ---> S1

S.S.19,
\ Generates SOC+ -> FOC+ trials. In this, a 10" SOC (noise) immediately precedes a 10" FOC (flashing light)
S1,
     #Z12: ON ^NOISE; Z18 ---> S2
S2,
\ This part invokes the non-reinforced CS+ module (z3; see S.S.3 and S.S.4), which has its own termination. Thus the return to S1.
     10": OFF ^NOISE; Z3; Z19 ---> S1

S.S.20,
\ Generates SOC- -> FOC- trials. In this, a 10" SOC (tone) immediately precedes a 10" FOC (solid light)
S1,
     #Z13: ON ^TONE; Z17 ---> S2
S2,
\ This part invokes the normal CS- module (z4; see S.S.5), which has its own termination. Thus the return to S1.
     10": OFF ^TONE; Z4; Z20 ---> S1

S.S.21,
S1,
     #Z17: ON ^TTL_S2TONE ---> S2
S2,
     0.001": OFF ^TTL_S2TONE ---> S1

S.S.22,
S1,
     #Z18: ON ^TTL_S1SolidLight ---> S2
S2,
     0.001": OFF ^TTL_S1SolidLight ---> S1

S.S.23,
S1,
        #Start: SET O = 800;            \ default freq = 1000 hz 
                SET P = 90;             \ volume = 80 db
                SET Q = 10;             \ rise\fall time = 10 ms
                SET R = 10000;          \ duration = 10000 ms
                ~InitANL926;~;          \ reset ANL-926
                ~SetFreq(MG, BOX,O);~;      \ initialize frequency
                ~SetAmp(MG, BOX,P);~;       \ initialize amplitude
                ~SetRF(MG, BOX,Q);~;        \ initialize rise\fall time
                ~SetDur(MG, BOX,R);~;       \ initialize duration
                ~SETCLICKFREQ(MG,BOX,10);~;--->SX         \ SET CLICK FREQUENCY 